PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = device-switching_baseline
  keyboardBackend = ioHub
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Routines
  Routine stimulus
    CodeComponent control_display
      Code Type = Py
      Begin Experiment:
        ## Define another window at beginning of experiment on alternate display
        win1 = visual.Window(
            size=(1920, 1080), fullscr=True, screen=1,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height')
      Each Frame:
        ## Continuously refresh alternate display
        ## (Refreshing of main display is programmed in by default)
        if continueRoutine:
            win1.flip()
    TextComponent number_stimulus_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = $num_start_time
      text [set every repeat] = $number_stimulus
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    KeyboardComponent stimulus_resp
      allowedKeys = 'j', 'k', 'd', 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent letter_stimulus_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = $letter_start_time
      text [set every repeat] = $letter_stimulus
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    CodeComponent assign_stimuli
      Code Type = Py
      Begin Experiment:
        ## set between-subject counter balancing
        ## simulate a coin flip to choose
        ## (in the future, tie this to session)

        if np.random.uniform() > .5:
            small_display = 'number'
            large_display = 'letter'
        else:
            small_display = 'letter'
            large_display = 'number'

        ## assuming win = small display
        if small_display == 'number':
            number_stimulus_text.win = win
            letter_stimulus_text.win = win1
        else:
            number_stimulus_text.win = win1
            letter_stimulus_text.win = win
  Routine isi
    CodeComponent control_display_isi
      Code Type = Py
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      Begin Routine:
        ## assign isi_blank1 text slide to alternate display
        isi_blank1.win=win1
      Each Frame:
        ## continuous refreshing screen while routine is running
        if continueRoutine:
            win1.flip()
    TextComponent isi_blank0
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent isi_blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space bar to begin.
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    CodeComponent global_variables
      Code Type = Py
      Begin Experiment:
        ## do this with the nested loop method

        ## defining the total set of stimuli to draw from
        number_stimuli = [2, 3, 4, 5, 6, 7, 8, 9]
        letter_stimuli = ['A', 'B', 'C', 'E', 'I', 'L', 'U', 'W']

        ## RSI in seconds
        rsi = .5
  Routine error
    CodeComponent error_check
      Code Type = Py
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      Begin Routine:
        ## Standard error check
        if stimulus_resp.keys == cor_mag_resp or stimulus_resp.keys == cor_par_resp:
            continueRoutine = False

        ## Display error text on same slide as stimulus
        error_text.win = stim_win
      Each Frame:
        ## Continuous refreshing of alternate display
        if continueRoutine:
            win1.flip()
    TextComponent error_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = ERROR!
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimulus', 1), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 2), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 3), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 4), ('display', 1), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 6), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 7), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 8), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 9), ('display', 1), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 1), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 2), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 3), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 4), ('display', 2), ('cor_mag_resp', 'j'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 6), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 7), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')]),
      OrderedDict([('stimulus', 8), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'j')]),
      OrderedDict([('stimulus', 9), ('display', 2), ('cor_mag_resp', 'k'), ('cor_par_resp', 'k')])]
    Routine isi
    Routine stimulus
  LoopTerminator trials
