PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = compare_lines
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Routines
  Routine ISI
    CodeComponent LineDefine
      Code Type = Py
      Begin Routine:
        trial_count += 1

        start_left_line = RotationCondition[line_orientation][0][0]
        end_left_line = RotationCondition[line_orientation][0][1]
        start_right_line = RotationCondition[line_orientation][1][0]
        end_right_line = RotationCondition[line_orientation][1][1]

        ## choose combination
        try:
            choice = random.choice(line_widths)
        except:
            line_widths = refresh_width_combinations(n_lines, max_width)
            choice = random.choice(line_widths)
        line_widths.remove(choice)

        flip = np.random.uniform() > .5
        if flip:
            left_width = choice[0]
            right_width = choice[1]
        else:
            left_width = choice[1]
            right_width = choice[0]
    TextComponent ISITimer
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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      text [set every repeat]:
        $'trial {} / {}'.format(trial_count, 70*4) if not trial_count % 50 else ''
  Routine sequential_line1
    CodeComponent SOABeginRoutine
      Code Type = Py
      Begin Routine:
        if np.random.uniform() > .5:
            first_line_label = 'left'
            first_line = (start_left_line, end_left_line)
            first_line_width = left_width
            second_line_label = 'right'
            second_line = (start_right_line, end_right_line)
            second_line_width = right_width
        else:
            second_line = (start_left_line, end_left_line)
            second_line_width = left_width
            second_line_label = 'left'
            first_line = (start_right_line, end_right_line)
            first_line_width = right_width
            first_line_label = 'right'
    CodeComponent SOAEachFrame
      Code Type = Py
      Each Frame:
        draw_line(first_line[0], first_line[1], first_line_width)
    TextComponent FirstLineTimer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent ConditionCheckLine1
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
    CodeComponent TimeLine1
      Code Type = Py
      Begin Routine:
        from datetime import datetime

        start = datetime.now()
      Each Frame:
        if (start - datetime.now()).total_seconds() >= 1:
            continueRoutine = False
  Routine sequential_gap
    TextComponent GapTimer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent ConditionCheckGap
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
  Routine sequential_line2
    CodeComponent EachFrame
      Code Type = Py
      Each Frame:
        if t <= 1.0:
            draw_line(second_line[0], second_line[1], second_line_width)
    CodeComponent ConditionCheckLine2
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
    KeyboardComponent SeqResponse
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine simultaneous
    CodeComponent DrawLinesSimultaneous
      Code Type = Py
      Each Frame:
        if t <= 2.0:
            draw_line(start_left_line, end_left_line, left_width)
            draw_line(start_right_line, end_right_line, right_width)
    CodeComponent ConditionCheckSimul
      Code Type = Py
      Begin Routine:
        if current_block == 'sequential':
            continueRoutine = False
    KeyboardComponent ResponseSimul
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    KeyboardComponent key_resp
      allowedKeys = 'down','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartBlock
    CodeComponent BeginBlock
      Code Type = Py
      Begin Routine:
        ## update block count
        block_count += 1
        trial_count = 0

        if block_count == 1:
            current_block = first_block
        else:
            current_block = second_block

        ## fill width array
        line_widths = refresh_width_combinations(n_lines, max_width)
    TextComponent BlockText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You are about to start block ' + str(block_count) + ' of 2.\nEach block has 328 trials. Youll see a trial update after every 50 trials to help keep you sane.\nPress the space bar to continue.'
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GlobalDefs
    CodeComponent FunctionDefine
      Code Type = Py
      Begin Experiment:
        import psychopy
        import time
        import random
        import itertools

        def determine_diagonal(start_coord_left_line, length, x_direction, y_direction):
            x_shift = 1 if x_direction == 'right' else -1
            y_shift = 1 if y_direction == 'up' else -1

            start_x = start_coord_left_line[0]
            start_y = start_coord_left_line[1]
            end_coord_left_line_x = start_x + x_shift* (length * cos(1.0472))
            end_coord_left_line_y = start_y + y_shift* (length * sin(1.0472))

            return (end_coord_left_line_x, end_coord_left_line_y)


        def draw_line(start_coord, end_coord, width):

            line = psychopy.visual.Line(
            win = win,
            units='pix',
            lineColor='black',
            lineWidth = width
            )

            line.start = start_coord
            line.end = end_coord
            line.draw()


        def refresh_width_combinations(n_lines, max_width):
            total_widths = np.linspace(1, max_width, n_lines)
            combinations = list(itertools.combinations(total_widths, 2))
            identical_pairs = [(x, x) for x in total_widths]
            target_identical_pairs = (len(combinations) / .65) - len(combinations)

            combinations += [(x, x) for x in total_widths] * round(target_identical_pairs / len(identical_pairs))

            return combinations
    CodeComponent ObjectDefine
      Code Type = Py
      Begin Experiment:
        from math import *

        '''
        Formula for calculating coordinates:
        xx = x + (d * cos(alpha))
        yy = y + (d * sin(alpha))
        '''
        ## GLOBAL LINE PARAMETERS
        length = 300
        starting_point_left_x = -300
        distance_between_lines = 600
        ## horizontal lines always zero
        starting_point_y = length / 2

        ## LINE WIDTH ARRAY PARAMETERS
        max_width = 4
        n_lines = 20

        ## VERTICAL LINES
        vertical_starting_point_line1 = (starting_point_left_x, starting_point_y)
        vertical_ending_point_line1 = (starting_point_left_x, starting_point_y - length)
        vertical_starting_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y)
        vertical_ending_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y - length)

        ## HORIZONTAL LINES
        horizontal_starting_point_line1 = (starting_point_left_x - (length / 2), 0)
        horizontal_ending_point_line1 = (starting_point_left_x + (length / 2), 0)
        horizontal_starting_point_line2 = (horizontal_starting_point_line1[0] + distance_between_lines, 0)
        horizontal_ending_point_line2  = (horizontal_ending_point_line1[0] + distance_between_lines, 0)

        ## DIAGONAL LINES
        ## forward slash (ie starts at top and goes forward)
        forward_starting_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'left', y_direction = 'up')
        forward_ending_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'right', y_direction = 'down')
        forward_starting_point_line2 = (forward_starting_point_line1[0] + distance_between_lines, forward_starting_point_line1[1])
        forward_ending_point_line2 = (forward_ending_point_line1[0] + distance_between_lines, forward_ending_point_line1[1])

        ## backward slash (ie starts at top and goes back)
        backward_starting_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'right', y_direction = 'up')
        backward_ending_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'left', y_direction = 'down')
        backward_starting_point_line2 = (backward_starting_point_line1[0] + distance_between_lines, backward_starting_point_line1[1])
        backward_ending_point_line2 = (backward_ending_point_line1[0] + distance_between_lines, backward_ending_point_line1[1])



        RotationCondition = {
        'vertical': [[vertical_starting_point_line1, vertical_ending_point_line1],
        [vertical_starting_point_line2, vertical_ending_point_line2]],

        'horizontal': [[horizontal_starting_point_line1, horizontal_ending_point_line1],
        [horizontal_starting_point_line2, horizontal_ending_point_line2]],

        'diagonal1': [[forward_starting_point_line1, forward_ending_point_line1], [forward_starting_point_line2, forward_ending_point_line2]],
        'diagonal2': [[backward_starting_point_line1, backward_ending_point_line1], [backward_starting_point_line2, backward_ending_point_line2]]
        }
    CodeComponent BlockOrder
      Code Type = Py
      Begin Experiment:
        if np.random.uniform() > .5:
            first_block = 'sequential'
            second_block= 'simultaneous'
        else:
            first_block = 'simultaneous'
            second_block = 'sequential'

        block_count = 0
  Routine check
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'left: ' + str(left_width) + '\n' + 'right: ' + str(right_width)
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  Routine save_data
    CodeComponent save_data_code
      Code Type = Py
      End Routine:
        trials.addData('left_width', left_width)
        trials.addData('right_width', right_width)
        trials.addData('global_line_length', length)
        trials.addData('global_starting_point_left_x', starting_point_left_x)
        trials.addData('global_distance_between_lines', distance_between_lines)

        if current_block == 'sequential':
            trials.addData('first_line_label', first_line_label)
            trials.addData('second_line_label', second_line_label)
        else:
            trials.addData('first_line_label', np.nan)
            trials.addData('second_line_label', np.nan)
  Routine Instructions
    TextComponent InstructionText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        In this pilot experiment, you will see two lines appear on the screen either simultaneously, or one after another. You need to judge the width of the lines and decide whether the line presented to left is larger (press the left arrow key), the line presented to the right is larger (press the right arrow key), or whether the lines are equal (press the down arrow key).

        You will see the lines for a total of 2 seconds (1 second each if they appear one after another), and you will have an unlimited amount of time to respond. You should try to respond as quickly and as accurately as possible. When both lines are presented simultaneously, you can respond as soon as the lines appear. If the lines are presented one after another, you can respond as soon as you see the second line.

        Press the space bar to continue.
    KeyboardComponent InstructionResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_2
    CodeComponent code
      Code Type = Py
      Begin Routine:
        identical_pairs = len([x for x in line_widths if x[0] == x[1]]) / len(line_widths)
        non_identical_pairs = len([x for x in line_widths if x[0] != x[1]]) / len(line_widths)
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'%identical: {}\n\n%not identical {}'.format(identical_pairs, non_identical_pairs)
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Flow
  Routine GlobalDefs
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine StartBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 82
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      conditions:
        [OrderedDict([('line_orientation', 'horizontal')]),
        OrderedDict([('line_orientation', 'vertical')]),
        OrderedDict([('line_orientation', 'diagonal1')]),
        OrderedDict([('line_orientation', 'diagonal2')])]
      Routine ISI
      Routine sequential_line1
      Routine sequential_gap
      Routine sequential_line2
      Routine simultaneous
      Routine save_data
    LoopTerminator trials
  LoopTerminator blocks
