PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = line_test
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent line_drawer
      Code Type = Py
      Before Experiment:
        import psychopy
        import math
      Begin Experiment:
        def line_drawer(width_min, width_max, space_between = 50, starting_point_x = -500, starting_point_y = 200, n_lines = 12, x_shift = 0):

            width_vector = np.linspace(width_min, width_max, num = n_lines)

            for line_width, _ in zip(width_vector, range(n_lines)):
                line = psychopy.visual.Line(
                win = win,
                units='pix',
                lineColor=[-1, -1, -1],
                lineWidth = line_width
                )

                line.start = [starting_point_x, starting_point_y]
                line.end = [starting_point_x + x_shift, starting_point_y - 200]
                line.draw()

                starting_point_x += 50
      Each Frame:
        # xx = x + (d * cos(alpha))

        line_drawer(width_max = 4, width_min = 1, n_lines = 20)
        line_drawer(width_max = 4, width_min = 1, starting_point_y = -20, x_shift = 200, n_lines = 20)
Flow
  Routine trial
