PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[0.75,0.75,0.75]
  expName = visual-search_exp1
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Routines
  Routine trial2
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prompt
    CodeComponent GlobalDefinitions
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import pickle
        import random
        import time
        trial_count = -1

        time_start_experiment = datetime.now()
      Begin Experiment:
        import psychopy
        ## this line is essential for mapping coordinates of mouse clicks to the coordinates of rectangles
        win.units = 'pix'

        ## print_line_widths
        ## ^ flag for troubleshooting

        ## initialize data containers
        subject_data = []
        line_data = []
        lines_rectangles_container = []

        ## anomaly stuff
        anomaly_probability = .3
        anomalies = [
        ['r0c1_bottom_right', 2],
        ['r0c2_bottom_left', 2],
        ['r0c2_bottom_right', 2],
        ['r1c0_bottom_right', 1],
        ['r1c0_right', 0],
        ['r1c1_bottom_left', 1],
        ['r1c1_bottom_right', 0],
        ['r1c1_right', 0],
        ['r1c2_bottom_left', 0],
        ['r1c2_bottom_right', 1],
        ['r2c1_bottom_right', 0],
        ['r2c1_right', 1],
        ['r2c2_bottom_left', 2],
        ['r2c2_bottom_right', 2],
        ['r2c2_right', 2]
        ]

        class DrawHexGrid:
            '''
            The general idea here is to think, for any given hexagon I want to draw, what position (eg, top left) in the hex am i starting at, what position do i want to finish at, and what's the starting coordinate
            Given this information, we rely on the formulas below to draw however many lines are needed to connect the starting position to the ending position
            In the process, I save out starting coordinates that will be used for the next hexagon and for the first hexagon in a new row, as well as handling some other edge case things

            Formula for calculating coordinates:
            xx = x + (d * cos(alpha))
            yy = y + (d * sin(alpha))
            '''
            def __init__(self, top_left_origin, edge_length = 120, x_count = 4, y_count = 4):

                self.top_left_origin = top_left_origin
                self.edge_length = edge_length
                self. x_count = x_count
                self.y_count = y_count
                self.point_list = ['top_left', 'bottom_left', 'bottom', 'bottom_right', 'top_right', 'top']
                self.point_dictionary = {
        'top_left': '[start_coord[0], start_coord[1] - self.edge_length]',
        'bottom_left': '[start_coord[0] + self.edge_length * cos(120), start_coord[1] - self.edge_length * sin(120)]',
        'bottom': '[start_coord[0] + self.edge_length * cos(120), start_coord[1] + self.edge_length * sin(120)]',
        'bottom_right': '[start_coord[0], start_coord[1] + self.edge_length]',
        'top_right': '[start_coord[0] - self.edge_length * cos(120), start_coord[1] + self.edge_length * sin(120)]',
        'top': '[start_coord[0] - self.edge_length * cos(120), start_coord[1] - self.edge_length * sin(120)]'
        }
                # for creating rectangles
                self.angle_dictionary = {
                'top_left': 0,
                'bottom_left': -55,
                'bottom': 55,
                'bottom_right': 0,
                'top_right': -55,
                'top': 55
                }

                # for creating line ids
                self.point_to_side = {
                'top_left': 'left',
                'bottom_left': 'bottom_left',
                'bottom': 'bottom_right',
                'bottom_right': 'right',
                'top_right': 'top_right',
                'top': 'top_left'
                }

            def make_grid(self):
                for row in range(self.y_count):
                    for col in range(self.x_count):
                        self.row = row
                        self.col = col

                        ## if it's the first hex
                        if not row and not col:

                            ## reset the line width drawer
                            self.line_width_container_draw = copy.deepcopy(line_width_container_original)

                            self._draw_hex('top_left', 'top_left', self.top_left_origin)
                            self.first_row_start_coord = self._coord_calculator(self.top_left_origin, 'top_left', 2)
                            self.new_hex_start_coord = self._coord_calculator(self.top_left_origin, 'top_left', 3)

                        ## if it's the first row
                        elif not row:
                            self._draw_hex('bottom_left', 'top_left', self.new_hex_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.new_hex_start_coord, 'bottom_left', 2)

                        ## if it's the first column
                        elif not col:

                            ## conditional to account for the staggered pattern
                            if not row % 2:
                            ## if even
                                start_pos = 'top'
                                new_hex_n_turns = 4
                                first_row_n_turns = 3

                            else:
                            ## if odd
                                start_pos = 'top_left'
                                new_hex_n_turns = 3
                                first_row_n_turns = 1

                            self._draw_hex(start_pos, 'top_right', self.first_row_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.first_row_start_coord, start_pos, new_hex_n_turns)
                            self.first_row_start_coord = self._coord_calculator(self.first_row_start_coord, start_pos, first_row_n_turns)

                        ## for all internal hex's
                        else:
                            ## catch the last hex on odd rows
                            if col == self.x_count - 1 and row % 2:
                                end_pos = 'top'
                            else:
                                end_pos = 'top_right'

                            self._draw_hex('bottom_left', end_pos, self.new_hex_start_coord)
                            self.new_hex_start_coord = self._coord_calculator(self.new_hex_start_coord, 'bottom_left', 2)


            def _coord_calculator(self, start_coord, start_pos, n_turns):
                ## takes in a starting coordinate, starting pos, and number of calcs to do
                ## returns ending coord as [x, y]
                ## this function will fail if you try to turn past top left, which i dont think ill need to do

                ## calc a slice out of point_list to iterate over what's appropriate
                new_point_list = self._rearrange_point_list(start_pos)

                for pos in new_point_list[:n_turns]:
                    start_coord = eval(self.point_dictionary[pos])

                return start_coord



            def _draw_hex(self, start_pos, end_pos, start_coord):

                ## draws a line from start_pos to end_pos
                new_point_list = self._rearrange_point_list(start_pos)

                for position in new_point_list:
                    if start_pos != end_pos and position == end_pos:
                        break
                    ## are we dealing with an exterior line?
                    is_exterior = self._determine_exterior(self.row, self.col, self.x_count, self.y_count, position)

                    line = self._define_line_type(is_exterior)
                    line.start = start_coord
                    line.end = eval(self.point_dictionary[position])

                    lines_rectangles_container.append({'line': line, 'line_id': 'r{}c{}_{}'.format(self.row, self.col, self.point_to_side[position]), 'is_exterior': is_exterior})

                    self._draw_rect(start_coord, line.end, position, is_exterior)

                    start_coord= line.end


            def _draw_rect(self, line_start, line_end, position, is_exterior = False):

                edge_length = self.edge_length
                center = [(line_end[0] + line_start[0]) / 2, (line_end[1] + line_start[1]) / 2]
                rotation = self.angle_dictionary[position]
                if not is_exterior:
                    rect =  psychopy.visual.Rect(
                    win = win,
                    pos = center,
                    units = 'pix',
                    width = 20,
                    height = edge_length - 20,
                    opacity = 0,
                    ori = rotation
                    )
                    rect.draw()

                    lines_rectangles_container[-1]['rect'] = rect
                    lines_rectangles_container[-1]['is_clicked'] = 'not_clicked'
                else:
                    lines_rectangles_container[-1]['rect'] = None
                    lines_rectangles_container[-1]['is_clicked'] = None

            def _determine_exterior(self, row, col, x_count, y_count, position):
                ## i should write good comments here but not now lol
                ## basically just using position in the array to check relative line position to determine whether to draw rectangles
                if not row:
                    if position in ['top_right', 'top']:
                        return True
                if not col:
                    if not row % 2:
                        to_check = ['top_left', 'bottom_left', 'top']
                    else:
                        to_check = ['top_left']
                    if position in to_check:
                        return True
                if row == y_count - 1:
                    if position in ['bottom_left', 'bottom']:
                        return True
                if col == x_count - 1:
                    if not row % 2:
                        to_check = ['bottom_right']
                    else:
                        to_check = ['bottom', 'bottom_right', 'top_right']
                    if position in to_check:
                        return True

                return False

            def _rearrange_point_list(self, start_pos):
                ## outputs a list where the first element is start_pos and the last element is the one before start_pos in point_list
                if start_pos == 'top_left':
                    return self.point_list

                return self.point_list[self.point_list.index(start_pos):] + self.point_list[:self.point_list.index(start_pos)-1]

            def _define_line_type(self, is_exterior):

                if is_exterior:
                    lineWidth = 2.3333333
                else:
                    ## this complexity might not be necessary anymore because this whole script is only running once
                    if not self.line_width_container_draw:
                        self.line_width_container_draw = copy.deepcopy(line_width_container_original)
                    lineWidth = self.line_width_container_draw.pop(0)

                return psychopy.visual.Line(
                    lineWidth = lineWidth,
                    win = win,
                    units='pix',
                    lineColor=[-1, -1, -1]
                    )

        ###############
        ## OTHER STUFF###
        ###############

        def compute_accuracy(lines_rectangles_container, clicked_lines):

            all_line_widths = [x['line'].lineWidth for x in lines_rectangles_container if x['rect'] is not None and x['line'].lineWidth is not None]
            selected_line_widths = [x['line'].lineWidth for x in clicked_lines]

            top_three = sorted(all_line_widths)[:3]
            accuracy = 0
            for selected_line_width in selected_line_widths:
                if selected_line_width in top_three:
                    accuracy += 1
            return accuracy / 3

        def compute_possible_thinnest_lines(lines_rectangles_container):
            all_line_widths = [x['line'].lineWidth for x in lines_rectangles_container if x['rect'] is not None and x['line'].lineWidth is not None]

            top_three = sorted(all_line_widths)[:3]
            return len([x for x in all_line_widths if x <= top_three[-1]])


        def get_line_orientation(line):
            if line is None:
                return None
            top = line.start if line.start[1] > line.end[1] else line.end
            bottom= line.start if line.start[1] < line.end[1] else line.end
            if top[0] < bottom[0]:
                return 'back_slash'
            if top[0] > bottom[0]:
                return 'forward_slash'
            return 'vertical'


        def save_data(pressed_object, line = None, line_id = None, selected_or_released = None):

            ## compute line top and bottom
            if line is not None:
                top = line.start if line.start[1] > line.end[1] else line.end
                bottom= line.start if line.start[1] < line.end[1] else line.end
            else:
                top = bottom = None

            anomaly_center = ''
            anomaly_mid_x = ''
            anomaly_mid_y = ''
            if is_anomaly_trial:
                anomaly_mid_x = (anomaly_line['line'].start[0] + anomaly_line['line'].end[0]) / 2
                anomaly_mid_y = (anomaly_line['line'].start[1] + anomaly_line['line'].end[1]) / 2

            selection_rt = datetime.now() - selection_start
            selection_rt_ms = selection_rt.seconds * 1000 + selection_rt.microseconds / 1000
            to_save = {
                'participant': expInfo['participant'],
                'date': expInfo['date'],
                'overall_time': datetime.now() - time_start_experiment,
                'trial_count': trial_count,
                'click_order': click_order,
                'prompt_rt_sec': PromptResponse.rt,
                'selection_rt_ms': selection_rt_ms,
                'pressed_object': pressed_object,
                'line_width': line.lineWidth if line else None,
                'top_x': top[0] if top is not None else None,
                'top_y': top[1] if top is not None else None,
                'bottom_x': bottom[0] if bottom is not None else None,
                'bottom_y': bottom[1] if bottom is not None else None,
                'line_id': line_id,
                'line_orientation': get_line_orientation(line),
                'selected_or_released': selected_or_released,
                'accuracy': compute_accuracy(lines_rectangles_container, clicked_lines) if line is None else None,
                'possible_thinnest_lines': compute_possible_thinnest_lines(lines_rectangles_container),
                'is_practice': is_practice,
                'is_anomaly_trial': is_anomaly_trial,
                'anomaly_mid_x': anomaly_mid_x,
                'anomaly_mid_y': anomaly_mid_y,
                'anomaly_line_id': anomaly_line['line_id'],
                'anomaly_group': anomaly_group
            }

            return to_save


        def save_line_data(lines_rectangles_container, line_data):
            ## save out line parameters on each trial

            for entry in lines_rectangles_container:
                top = entry['line'].start if entry['line'].start[1] > entry['line'].end[1] else entry['line'].end
                bottom= entry['line'].start if entry['line'].start[1] < entry['line'].end[1] else entry['line'].end

                line_data.append({
                    'participant': expInfo['participant'],
                    'date': expInfo['date'],
                    'trial_count': trial_count,
                    'line_id': entry['line_id'],
                    'line_width': entry['line'].lineWidth,
                    'is_exterior': entry['is_exterior'],
                    'top_x': top[0],
                    'top_y': top[1] ,
                    'bottom_x': bottom[0],
                    'bottom_y': bottom[1],
                    })

            if not os.path.exists('line_data'):
                os.mkdir('line_data')
            with open('line_data/{}_{}_line.pickle'.format(expInfo['participant'], expInfo['date']), 'wb') as file:
                pickle.dump(line_data, file)
            file.close()
      Begin Routine:
        trial_count += 1
        lines_rectangles_counter = 0
        click_order = 0
        if not trial_count:
            is_practice = True
        else:
            is_practice = False

        lines_rectangles_container = []
    CodeComponent FrameCode
      Code Type = Py
      Begin Routine:
        dhg = DrawHexGrid([-400, 400])

        dhg.make_grid()


        if trial_count == 0:
            is_anomaly_trial  = False
        else:
            is_anomaly_trial = np.random.uniform() < anomaly_probability


        anomaly_line_id = ''
        anomaly_group = ''
        anomaly_line = {'line_id': ''}
        if is_anomaly_trial:
            anomaly_line_id, anomaly_group = random.sample(anomalies, 1)[0]
            anomaly_line = [x for x in lines_rectangles_container if x['line_id'] == anomaly_line_id][0]
            X = lines_rectangles_container.index([x for x in lines_rectangles_container if x['line_id'] == anomaly_line_id][0])
            lines_rectangles_container[X]['line'].lineWidth = None


        save_line_data(lines_rectangles_container, line_data)
      Each Frame:
        #rect1.draw()

        for entry in lines_rectangles_container:
            if entry['line_id'] != anomaly_line['line_id']:
                entry['line'].draw()
    CodeComponent LineWidthCalc
      Code Type = Py
      Before Experiment:
        import copy
      Begin Experiment:
        line_width_container = np.linspace(1, 4, 10)
        line_width_container = [round(x, 4) for x in line_width_container]


        range_to_width = {}

        percentages = [.02, .07, .07] + [.17]*4 + [.07, .07, .02]

        base_percentage = 0
        for percentage, line_width in zip(percentages, line_width_container):
            range_to_width[(base_percentage, base_percentage+percentage)] = line_width
            base_percentage += percentage +.0000000001


        def choose_line_width():
            ## draw random from uniform distribution, choose line width
            random_number  = round(np.random.uniform(), 3)
            for key in range_to_width:
                if random_number >= key[0]  and random_number <= key[1]:
                    return range_to_width[key]


        ## initialize full container
        line_width_container_original = []

        for i in range(400):
            line_width_container_original.append(choose_line_width())
      Begin Routine:
        line_width_container_original = []

        for i in range(400):
            line_width_container_original.append(choose_line_width())
    KeyboardComponent PromptResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PromptToContinue
      color = black
      letterHeight = 35
      pos = (-700, 400)
      startVal [time (s)] = 0.0
      text = Press the space bar when you are ready to select the three thinnest lines.
      units = pix
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  Routine Selection
    CodeComponent LineSelection
      Code Type = Py
      Begin Routine:
        mouse = psychopy.event.Mouse(win = win)

        clicked_lines = []

        show_text = 'Select three of the thinnest lines'
        last_clicked = ''
        too_many_timer = 0
      Each Frame:
        ## check for hovering
        for entry in lines_rectangles_container:
            if entry['rect'] is not None and entry['line_id'] != anomaly_line['line_id']:
                entry['rect'].draw()

                if entry['is_clicked'] == 'clicked':
                    if entry['rect'].contains(mouse):
                        entry['line'].lineColor = [0,  1, 0]
                    else:
                        entry['line'].lineColor = [-1, 1, -1]
                elif entry['rect'].contains(mouse):
                    entry['line'].lineColor = [1, -1, -1]
                else:
                    entry['line'].lineColor = [-1] * 3

            if entry['line_id'] != anomaly_line['line_id']:
                entry['line'].draw()

            # people on the forums say you should timeout for 1ms on a loop like this to not hog all the computer's resources
            # but i find that even 0.5 ms timeout makes the display laggy
            #time.sleep(0.0005)

        ## react to mouse press
        if mouse.getPressed()[0]:
            mouse_pos = mouse.getPos()
            for entry in lines_rectangles_container:
                if entry['rect'] is not None and entry['rect'].contains(mouse_pos) and entry['line_id'] != anomaly_line['line_id']:

                    if entry['is_clicked'] == 'clicked':
                        click_order += 1
                        entry['is_clicked'] = 'not_clicked'
                        released_line = clicked_lines.pop(clicked_lines.index(entry))
                        subject_data.append(save_data('line', released_line['line'], released_line['line_id'], 'released'))

                    else:
                        if len(clicked_lines) < 3:
                            click_order += 1
                            entry['is_clicked'] = 'clicked'
                            clicked_lines.append(entry)
                            subject_data.append(save_data('line', entry['line'], entry['line_id'], 'selected'))

                        else:
                            show_text = "You've clicked three lines already!"
                            too_many_timer = datetime.now()

                    time.sleep(.1)

                    break
    TextComponent PromptToSelect
      color = black
      letterHeight = 35
      pos = (-700, 400)
      startVal [time (s)] = 0.0
      text [set every frame] = $show_text
      units = pix
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    CodeComponent SubmitButton
      Code Type = Py
      Begin Routine:
        submit_box = psychopy.visual.Rect(
        win = win,
        pos = [600, -400],
        units = 'pix',
        width = 200,
        height = 100,
        lineColor = 'black',
        fillColor = 'green'
        )

        submit_text = visual.TextStim(win=win, name='SubmitText',
            text='SUBMIT',
            font='Open Sans',
            units='pix', pos=(600, -400), height=35.0, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-4.0);
      Each Frame:
        ## control instruction text
        if not too_many_timer:
            if len(clicked_lines) < 3:
                show_text = 'Select the three thinnest lines.'
            else:
                show_text = 'Press the submit button to confirm your selection and continue'
                submit_box.draw()
                submit_text.draw()

        else:
            if (datetime.now() - too_many_timer).seconds > 3:
                too_many_timer = 0
            elif len(clicked_lines) == 3:
                submit_box.draw()
                submit_text.draw()
    CodeComponent SaveData
      Code Type = Py
      Begin Routine:
        selection_start = datetime.now()
      Each Frame:
        ## for submit button

        if mouse.getPressed()[0]:
            mouse_pos = mouse.getPos()
            if len(clicked_lines) == 3 and submit_box.contains(mouse_pos):
                click_order += 1
                subject_data.append(save_data('submit'))
                continueRoutine = False
  Routine Welcome
    TextComponent WelcomeText
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1000
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      text:
        Welcome to the experiment:

        You will be viewing a series of images designed to capture aspects of the materials that the microscopist would see. You will view a 4 x 4 display of hexagons. The important features are the boundaries between these hexagons. Your task is going to be to search the array and select three of the thinnest lines that you can find. These lines will always be in the interior of the array between two hexagons. Wait for the experimenter to proceed.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent InstructionsText
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = When the image first appears, you can search the display for as long as you like. Once you are ready to identify the lines that you think are three of the thinnest, press the spacebar. You can then use your mouse to select the lines you have chosen. You can click and unclick lines, if you change your mind. Once you are happy with your three selections you can press the submit button. Please work through each search array as quickly and accurately as possible. You will be able to take short breaks before starting each search task.
      units = pix
      wrapWidth = 1000
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    KeyboardComponent InstructionsResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ending
    TextComponent EndingText
      color = black
      letterHeight = 24
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = This concludes the experiment- thank you for participating!
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  Routine Example
    KeyboardComponent ExampleResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent DemoText
      color = black
      letterHeight = 35
      pos = (-700, 350)
      startVal [time (s)] = 0.0
      text = Press the space bar when you are ready to see the rest of the instructions.
      units = pix
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    CodeComponent DrawDemoArray
      Code Type = Py
      Begin Routine:
        dhg = DrawHexGrid([-400, 400])

        dhg.make_grid()
      Each Frame:
        for entry in lines_rectangles_container:
            entry['line'].draw()
  Routine ISI
    CodeComponent displayText
      Code Type = Py
      Begin Routine:
        if is_practice:
            ISI_display_text = "You just finished the practice trial. Moving forward with the experiment you will be doing trials like this for about 20 minutes. If you would like more clarification before beginning, you can ask the experimenter any questions at this time. Otherwise, press spacebar to continue to the experiment."
        else:
            ISI_display_text = "Press the space bar to see the next display."
    TextComponent TimingText
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      text [set every repeat] = $ISI_display_text
      units = pix
      wrapWidth = 1000
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    CodeComponent SaveToFile
      Code Type = Py
      Begin Routine:
        import pickle

        if not os.path.exists('long_data'):
            os.mkdir('long_data')
        with open('long_data/{}_{}_long.pickle'.format(expInfo['participant'], expInfo['date']), 'wb') as file:
            pickle.dump(subject_data, file)
        file.close()
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AnomalyInstructions
    TextComponent AnomalyInstructionsText
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1000
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      text:
        Throughout this experiment, there will be times when one of the lines in the array will be missing. This will have the impact of making one of the grains larger than the rest of them. The boundaries of these larger grains are no more or less likely to be thinner than boundaries between other grains---in other words, there's no need to pay special attention to the boundaries of the large grains.

        You will do one practice round before starting the real experiment.

        Please press the space bar when you are ready to begin the practice.
    KeyboardComponent AnomalyInstructionsResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Example
  Routine Instructions
  Routine AnomalyInstructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine Prompt
    Routine Selection
    Routine ISI
  LoopTerminator trials
  Routine Ending
